def model ICC_SMC as
  // UNIT DECLARATION
  def unit conductance_units as
    unit siemens {pref: nano};
  enddef;
  def unit millifarads as
    unit farad {pref: milli};
  enddef;
  def unit voltage_units as
    unit volt {pref: milli};
  enddef;
  def unit volume_units as
    unit meter {expo: 3, pref: micro};
  enddef;
  def unit Inverse_Voltage_units as
    unit voltage_units {expo: -1};
  enddef;
  def unit Inverse_Voltage_Units_per_time_units as
    unit Inverse_Voltage_units;
    unit time_units {expo: -1};
  enddef;
  def unit time_units as
    unit second {pref: milli};
  enddef;
  def unit current_units as
    unit voltage_units;
    unit conductance_units;
  enddef;
  def unit rate_constants_units as
    unit time_units {expo: -1};
  enddef;
  def unit capacitance_units as
    unit farad {pref: pico};
  enddef;
  def unit Temperature_units as
    unit kelvin;
  enddef;
  def unit Inverse_Temperature_units_times_conductance as
    unit Temperature_units {expo: -1};
    unit conductance_units;
  enddef;
  def unit F_units as
    unit mole {expo: -1};
    unit coulomb;
  enddef;
  def unit R_units as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit litre;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit millimolar_per_millisecond as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_time_units as
    unit time_units {expo: -1};
  enddef;
  def unit millimolar_per_time_units as
    unit per_time_units;
    unit millimolar;
  enddef;
  def unit millimolar_per_millisecond_per_millivolt as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit second {expo: -1};
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit mole_to_millimole as
    unit mole;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit tension_units as
    unit pascal;
  enddef;
  // END OF UNIT DECLARATION

  def comp Time as
    var time: time_units {priv: out, pub: out};
  enddef;
  // closure of time component

  def comp Gap_junction as
    var Gcouple: conductance_units {init: 1.3, priv: out, pub: out};
  enddef;

  def comp Environment as
    var T: Temperature_units {init: 310, priv: out};
    var T_exp: Temperature_units {init: 297, priv: out};
    var F: F_units {init: 96486, priv: out, pub: out};
    var R: R_units {init: 8314.4, priv: out};
    var Q10Ca: dimensionless {init: 2.1, priv: out};
    var Q10K: dimensionless {init: 1.365, priv: out};
    var Q10Na: dimensionless {init: 2.45, priv: out};
    var Ca_o: millimolar {init: 2.5, priv: out, pub: out};
    var Na_o: millimolar {init: 137, priv: out, pub: out};
    var K_o: millimolar {init: 5.9, priv: out, pub: out};
    var Cl_o: millimolar {init: 134, priv: out, pub: out};
    var T_correction_Na: dimensionless {priv: out, pub: out};
    var T_correction_K: dimensionless {priv: out, pub: out};
    var T_correction_Ca: dimensionless {priv: out, pub: out};
    var T_correction_BK: conductance_units {priv: out, pub: out};
    var FoRT: Inverse_Voltage_units {priv: out, pub: out};
    var RToF: voltage_units {priv: out, pub: out};
    // equation that calculates FoRT
    FoRT = F/(R*T);
    // closure of equation that calculates FoRT
    // equation that calculates RToF
    RToF = R*T/F;
    // closure of equation that calculates FoRT
    // equation that calculates Tcorrection_Ca
    T_correction_Ca = pow(Q10Ca, (T-T_exp)/10{Temperature_units});
    // closure of equation that calculates TcorrectionCa
    // equation that calculates Tcorrection_K
    T_correction_K = pow(Q10K, (T-T_exp)/10{Temperature_units});
    // closure of equation that calculates TcorrectionK
    // equation that calculates Tcorrection_Na
    T_correction_Na = pow(Q10Na, (T-T_exp)/10{Temperature_units});
    // closure of equation that calculates TcorrectionNa
    // equation that calculates Tcorrection_Na
    T_correction_BK = 1.1{Inverse_Temperature_units_times_conductance}*(T-T_exp);
    // closure of equation that calculates TcorrectionNa
  enddef;
  // closure of environment component

  def comp SM_Membrane as
    var Cm_SM: capacitance_units {init: 77};
    var Vol_SM: volume_units {init: 3500, priv: out, pub: out};
    var Vm_SM: voltage_units {init: -69.75, priv: out, pub: out};
    var time: time_units {priv: out, pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    // derived-quantity: yes
    var Ca_i: millimolar {init: 0.00008, priv: out, pub: out};
    var Na_i: millimolar {init: 10, priv: out, pub: out};
    var K_i: millimolar {init: 164, priv: out};
    var Ca_o: millimolar {priv: out, pub: in};
    var Ach: millimolar {priv: out, pub: in};
    var Na_o: millimolar {priv: out, pub: in};
    var K_o: millimolar {priv: out, pub: in};
    var Cl_o: millimolar {priv: out, pub: in};
    var T_correction_Ca: dimensionless {priv: out, pub: in};
    var T_correction_Na: dimensionless {priv: out, pub: in};
    var T_correction_K: dimensionless {priv: out, pub: in};
    var T_correction_BK: conductance_units {priv: out, pub: in};
    var RToF: voltage_units {priv: out, pub: in};
    var FoRT: Inverse_Voltage_units {priv: out, pub: in};
    var F: F_units {priv: out, pub: in};
    var I_Na_SM: current_units {priv: in};
    var I_Ltype_SM: current_units {priv: in};
    var I_LVA_SM: current_units {priv: in};
    var I_kr_SM: current_units {priv: in};
    var I_ka_SM: current_units {priv: in};
    var I_BK_SM: current_units {priv: in};
    var I_NSCC_SM: current_units {priv: in};
    var I_bk_SM: current_units {priv: in};
    var J_CaSR_SM: millimolar_per_millisecond {priv: in};
    var I_stim: current_units {pub: in};
    // equation that calculates dVm_SM/dt
    // closure of equation dVm_SM/dt= (-1/Cm)*(sum of ionic currents)
    ode(Vm_SM, time) = -1.0{dimensionless}*1.0{dimensionless}/Cm_SM*(I_Na_SM+I_Ltype_SM+I_LVA_SM+I_kr_SM+I_ka_SM+I_BK_SM+I_NSCC_SM+I_bk_SM+(-1.0{dimensionless}*I_stim));
    // equation that calculates dCai/dt
    ode(Ca_i, time) = (-1{dimensionless}*I_Ltype_SM+(-1{dimensionless}*I_LVA_SM))/(2.0{dimensionless}*0.001{mole_to_millimole}*F*Vol_SM)+(-1{dimensionless}*J_CaSR_SM);
    // closure of equation Ca_i
  enddef;
  // closure of membrane component

  def comp active_tension as
    var T0: tension_units {init: 325e3};
    // Pa Moriya and Miyazaki 1982 for circ muscle
    var beta: dimensionless {init: 0.52};
    var Ca_50: millimolar {init: 0.000298833794888720};
    var h: dimensionless {init: 5.57611228496346};
    var Ca_max: dimensionless {init: 1.0};
    var lambda_val: dimensionless {init: 1.0};
    var tension: tension_units {pub: out};
    var Ca: millimolar {pub: in};
    tension = Ca_max*T0*(1{dimensionless}+beta*(lambda_val-1{dimensionless}))*pow(Ca, h)/(pow(Ca, h)+pow(Ca_50, h));
  enddef;

  def comp I_stim as
    var Gcouple: conductance_units {pub: in};
    var I_stim: current_units {pub: out};
    var V_SMC: voltage_units {pub: in};
    var V_ICC: voltage_units {pub: in};
    // equation that calculates I_stim
    I_stim = Gcouple*(V_ICC-V_SMC);
  enddef;

  def comp d_Ltype_SM as
    var Vm_SM: voltage_units {pub: in};
    var d_inf_Ltype_SM: dimensionless;
    var tau_d_Ltype_SM: time_units;
    var d_Ltype_SM: dimensionless {init: 0.0, pub: out};
    var time: time_units {pub: in};
    var T_correction_Ca: dimensionless {pub: in};
    // equation that calculates d_inf_Ltype
    d_inf_Ltype_SM = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vm_SM+17{voltage_units})/(-4.3{voltage_units})));
    // closure of equation that calculates d_inf_Ltype
    // equation that calculates tau_d_Ltype
    tau_d_Ltype_SM = T_correction_Ca*0.47{time_units};
    // closure of equation that calculates tau_d_Ltype
    // equation that calculates d_Ltype
    ode(d_Ltype_SM, time) = (d_inf_Ltype_SM-d_Ltype_SM)/tau_d_Ltype_SM;
    // closure of equation d(d_Ltype)/dt=(d_inf_Ltype-d_Ltype)/tau_d_Ltype
  enddef;
  // closure of d_Ltype

  def comp f_Ltype_SM as
    var Vm_SM: voltage_units {pub: in};
    var f_inf_Ltype_SM: dimensionless;
    var tau_f_Ltype_SM: time_units;
    var f_Ltype_SM: dimensionless {init: 0.95, pub: out};
    var time: time_units {pub: in};
    var T_correction_Ca: dimensionless {pub: in};
    // equation that calculates f_inf_Ltype
    f_inf_Ltype_SM = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vm_SM+43{voltage_units})/8.9{voltage_units}));
    // closure of equation that calculates f_inf_Ltype
    // equation that calculates tau_f_Ltype
    // closure of equation that calculates tau_f_Ltype
    tau_f_Ltype_SM = T_correction_Ca*86{time_units};
    // equation that calculates f_Ltype
    ode(f_Ltype_SM, time) = (f_inf_Ltype_SM-f_Ltype_SM)/tau_f_Ltype_SM;
    // closure of equation d(f_Ltype)/dt=(f_inf_Ltype-f_Ltype)/tau_f_Ltype
  enddef;
  // closure of f_Ltype

  def comp f_ca_Ltype_SM as
    var Ca_i: millimolar {pub: in};
    var f_ca_inf_Ltype_SM: dimensionless;
    var tau_f_ca_Ltype_SM: time_units;
    var f_ca_Ltype_SM: dimensionless {init: 1.0, pub: out};
    var time: time_units {pub: in};
    var T_correction_Ca: dimensionless {pub: in};
    // equation that calculates f_inf_ca Ltype
    f_ca_inf_Ltype_SM = 1.0{dimensionless}-1.0{dimensionless}/(1.0{dimensionless}+exp((Ca_i-0.00008999{millimolar}-0.000214{millimolar})/(-0.0000131{millimolar})));
    // closure of equation that calculates f_ca_inf_Ltype
    // equation that calculates tau_f_ca_Ltype
    // closure of equation that calculates tau_f_ca_Ltype
    tau_f_ca_Ltype_SM = T_correction_Ca*2{time_units};
    // equation that calculates f_ca_Ltype
    ode(f_ca_Ltype_SM, time) = (f_ca_inf_Ltype_SM-f_ca_Ltype_SM)/tau_f_ca_Ltype_SM;
    // closure of equation d(f_ca_Ltype)/dt=(f_ca_inf_Ltype-f_ca_Ltype)/tau_f_ca_Ltype
  enddef;
  // closure of f_Ltype

  def comp I_Ltype_SM as
    var I_Ltype_SM: current_units {pub: out};
    var E_Ca: voltage_units;
    var G_max_Ltype: conductance_units {init: 65};
    var Vm_SM: voltage_units {priv: out, pub: in};
    var f_Ltype_SM: dimensionless {priv: in};
    var d_Ltype_SM: dimensionless {priv: in};
    var f_ca_Ltype_SM: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {priv: out, pub: in};
    var T_correction_Ca: dimensionless {priv: out, pub: in};
    var time: time_units {priv: out, pub: in};
    // EQUATION OF E_Ca
    E_Ca = 0.5{dimensionless}*RToF*ln(Ca_o/Ca_i);
    // closure ofEquation E_Ca
    // EQUATION OF I_Ltype
    I_Ltype_SM = G_max_Ltype*f_Ltype_SM*d_Ltype_SM*f_ca_Ltype_SM*(Vm_SM-E_Ca);
    // closure ofEquation I_Ltype
  enddef;
  // closure of I_Ltype

  def comp J_CaSR_SM as
    var J_CaSR_SM: millimolar_per_millisecond {pub: out};
    var J_max_CaSR: millimolar_per_millisecond {init: 0.31705};
    var Ca_i: millimolar {pub: in};
    // EQUATION OF J_CaSR
    J_CaSR_SM = J_max_CaSR*pow(Ca_i*1.0{per_millimolar}, 1.34{dimensionless});
    // closure ofEquation J_CaSR
  enddef;
  // closure of J_CaSR

  def comp d_LVA_SM as
    var Vm_SM: voltage_units {pub: in};
    var d_inf_LVA_SM: dimensionless;
    var tau_d_LVA_SM: time_units;
    var d_LVA_SM: dimensionless {init: 0.02, pub: out};
    var time: time_units {pub: in};
    var T_correction_Ca: dimensionless {pub: in};
    // equation that calculates d_inf_LVA
    d_inf_LVA_SM = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vm_SM+27.5{voltage_units})/(-10.9{voltage_units})));
    // closure of equation that calculates d_inf_LVA
    // equation that calculates tau_d_LVA
    tau_d_LVA_SM = T_correction_Ca*3.0{time_units};
    // closure of equation that calculates tau_d_LVA
    // equation that calculates d_LVA
    ode(d_LVA_SM, time) = (d_inf_LVA_SM-d_LVA_SM)/tau_d_LVA_SM;
    // closure of equation d(d_LVA)/dt=(d_inf_LVA-d_LVA)/tau_d_LVA
  enddef;
  // closure of d_LVA

  def comp f_LVA_SM as
    var Vm_SM: voltage_units {pub: in};
    var f_inf_LVA_SM: dimensionless;
    var tau_f_LVA_SM: time_units;
    var f_LVA_SM: dimensionless {init: 0.99, pub: out};
    var time: time_units {pub: in};
    var T_correction_Ca: dimensionless {pub: in};
    // equation that calculates f_inf_LVA
    f_inf_LVA_SM = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vm_SM+15.8{voltage_units})/7{voltage_units}));
    // closure of equation that calculates f_inf_LVA
    // equation that calculates tau_f_LVA
    // closure of equation that calculates tau_f_LVA
    tau_f_LVA_SM = T_correction_Ca*7.58{time_units}*exp(Vm_SM*0.00817{Inverse_Voltage_units});
    // equation that calculates f_LVA
    ode(f_LVA_SM, time) = (f_inf_LVA_SM-f_LVA_SM)/tau_f_LVA_SM;
    // closure of equation d(f_LVA)/dt=(f_inf_LVA-f_LVA)/tau_f_LVA
  enddef;
  // closure of f_LVA

  def comp I_LVA_SM as
    var I_LVA_SM: current_units {pub: out};
    var E_Ca: voltage_units;
    var G_max_LVA: conductance_units {init: 0.18};
    var Vm_SM: voltage_units {priv: out, pub: in};
    var f_LVA_SM: dimensionless {priv: in};
    var d_LVA_SM: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var T_correction_Ca: dimensionless {priv: out, pub: in};
    var time: time_units {priv: out, pub: in};
    // EQUATION OF E_Ca
    E_Ca = 0.5{dimensionless}*RToF*ln(Ca_o/Ca_i);
    // closure ofEquation E_Ca
    // EQUATION OF I_LVA
    I_LVA_SM = G_max_LVA*f_LVA_SM*d_LVA_SM*(Vm_SM-E_Ca);
    // closure ofEquation I_LVA
  enddef;
  // closure of I_LVA

  def comp d_BK_SM as
    var Vm_SM: voltage_units {pub: in};
    var Ca_i: millimolar {pub: in};
    var d_BK_SM: dimensionless {pub: out};
    var time: time_units {pub: in};
    // equation that calculates d_BK
    d_BK_SM = 1.0{dimensionless}/(1.0{dimensionless}+exp(Vm_SM/(-17{voltage_units})-2.0{dimensionless}*ln(Ca_i/0.001{millimolar})));
    // closure of equation that calculates d_inf_BK
  enddef;
  // closure of d_BK

  def comp I_BK_SM as
    var I_BK_SM: current_units {pub: out};
    var Ca_i: millimolar {priv: out, pub: in};
    var E_K: voltage_units;
    var G_max_BK: conductance_units {init: 45.7};
    var Vm_SM: voltage_units {priv: out, pub: in};
    var d_BK_SM: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var T_correction_BK: conductance_units {pub: in};
    var time: time_units {priv: out, pub: in};
    // EQUATION OF E_K
    E_K = RToF*ln(K_o/K_i);
    // closure ofEquation E_K
    // EQUATION OF I_BK
    I_BK_SM = (G_max_BK+T_correction_BK)*d_BK_SM*(Vm_SM-E_K);
    // closure ofEquation I_BK
  enddef;
  // closure of I_BK

  def comp I_bk_SM as
    var I_bk_SM: current_units {pub: out};
    var E_K: voltage_units;
    var G_max_bk: conductance_units {init: 0.0144};
    var Vm_SM: voltage_units {pub: in};
    var RToF: voltage_units {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    // EQUATION OF E_K
    E_K = RToF*ln(K_o/K_i);
    // closure ofEquation E_K
    // EQUATION OF I_bk
    I_bk_SM = G_max_bk*(Vm_SM-E_K);
    // closure ofEquation I_bk
  enddef;
  // closure of I_bk

  def comp xr1_SM as
    var Vm_SM: voltage_units {pub: in};
    var xr1_inf_SM: dimensionless;
    var tau_xr1_SM: time_units;
    var xr1_SM: dimensionless {init: 0.0, pub: out};
    var time: time_units {pub: in};
    var T_correction_K: dimensionless {pub: in};
    // equation that calculates xr1
    xr1_inf_SM = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vm_SM+27{voltage_units})/(-5.0{voltage_units})));
    // closure of equation that calculates xr1
    // equation that calculates tau_xr1
    tau_xr1_SM = T_correction_K*80{time_units};
    // closure of equation that calculates xr1
    // equation that calculates xr1
    ode(xr1_SM, time) = (xr1_inf_SM-xr1_SM)/tau_xr1_SM;
    // closure of equation d(xr1)/dt=(xr1_inf-xr1)/tau_xr1
  enddef;
  // closure of xr1

  def comp xr2_SM as
    var Vm_SM: voltage_units {pub: in};
    var xr2_inf_SM: dimensionless;
    var tau_xr2_SM: time_units;
    var xr2_SM: dimensionless {init: 0.82, pub: out};
    var time: time_units {pub: in};
    var T_correction_K: dimensionless {pub: in};
    // equation that calculates xr2_inf
    xr2_inf_SM = 0.2{dimensionless}+0.8{dimensionless}/(1.0{dimensionless}+exp((Vm_SM+58{voltage_units})/10{voltage_units}));
    // closure of equation that calculates xr2_inf
    // equation that calculates tau_xr2
    tau_xr2_SM = T_correction_K*(-707{time_units}+1481{time_units}*exp((Vm_SM+36{voltage_units})/95{voltage_units}));
    // closure of equation that calculates tau_xr2
    // equation that calculates d_kr
    ode(xr2_SM, time) = (xr2_inf_SM-xr2_SM)/tau_xr2_SM;
    // closure of equation d(xr2)/dt=(xr2_inf-xr2)/tau_xr2
  enddef;
  // closure of xr2

  def comp I_kr_SM as
    var I_kr_SM: current_units {pub: out};
    var E_K: voltage_units;
    var G_max_kr_SM: conductance_units {init: 35};
    var Vm_SM: voltage_units {priv: out, pub: in};
    var xr1_SM: dimensionless {priv: in};
    var xr2_SM: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var T_correction_K: dimensionless {priv: out, pub: in};
    var time: time_units {priv: out, pub: in};
    // EQUATION OF E_K
    E_K = RToF*ln(K_o/K_i);
    // closure ofEquation E_K
    // EQUATION OF I_kr
    I_kr_SM = G_max_kr_SM*xr1_SM*xr2_SM*(Vm_SM-E_K);
    // closure ofEquation I_kr
  enddef;
  // closure of I_kr

  def comp m_Na_SM as
    var Vm_SM: voltage_units {pub: in};
    var m_inf_Na: dimensionless;
    var tau_m_Na: time_units;
    var m_Na_SM: dimensionless {init: 0.005, pub: out};
    var time: time_units {pub: in};
    var T_correction_Na: dimensionless {pub: in};
    // equation that calculates m_Na
    m_inf_Na = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vm_SM+47{voltage_units})/(-4.8{voltage_units})));
    // closure of equation that calculates m_inf_Na
    // equation that calculates tau_m_Na
    tau_m_Na = T_correction_Na*(Vm_SM*(-0.017{Inverse_Voltage_units})*1{time_units}+0.440{time_units});
    // closure of equation that calculates tau_m_Na
    // equation that calculates m_Na
    ode(m_Na_SM, time) = (m_inf_Na-m_Na_SM)/tau_m_Na;
    // closure of equation d(m_Na)/dt=(m_inf_Na-m_Na)/tau_m_Na
  enddef;
  // closure of m_Na

  def comp h_Na_SM as
    var Vm_SM: voltage_units {pub: in};
    var h_inf_Na: dimensionless;
    var tau_h_Na: time_units;
    var h_Na_SM: dimensionless {init: 0.05787, pub: out};
    var time: time_units {pub: in};
    var T_correction_Na: dimensionless {pub: in};
    // equation that calculates f_inf_Na
    h_inf_Na = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vm_SM+78{voltage_units})/3{voltage_units}));
    // closure of equation that calculates h_inf_Na
    // equation that calculates tau_h_Na
    tau_h_Na = T_correction_Na*(Vm_SM*(-0.25{Inverse_Voltage_units})*1{time_units}+5.50{time_units});
    // closure of equation that calculates tau_h_Na
    // equation that calculates f_Na
    ode(h_Na_SM, time) = (h_inf_Na-h_Na_SM)/tau_h_Na;
    // closure of equation d(h_Na)/dt=(h_inf_Na-f_Na)/tau_h_Na
  enddef;
  // closure of hq_Na

  def comp I_Na_SM as
    var I_Na_SM: current_units {pub: out};
    var E_Na: voltage_units;
    var G_max_Na_SM: conductance_units {init: 3};
    var Vm_SM: voltage_units {priv: out, pub: in};
    var h_Na_SM: dimensionless {priv: in};
    var m_Na_SM: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var T_correction_Na: dimensionless {priv: out, pub: in};
    var time: time_units {priv: out, pub: in};
    // EQUATION OF E_Na
    E_Na = RToF*ln(Na_o/Na_i);
    // closure ofEquation E_Na
    // EQUATION OF I_Na
    I_Na_SM = G_max_Na_SM*h_Na_SM*m_Na_SM*(Vm_SM-E_Na);
    // closure ofEquation I_Na
  enddef;
  // closure of I_Na

  def comp xa1_SM as
    var Vm_SM: voltage_units {pub: in};
    var xa1_inf_SM: dimensionless;
    var tau_xa1_SM: time_units;
    var xa1_SM: dimensionless {init: 0.00414, pub: out};
    var time: time_units {pub: in};
    var T_correction_K: dimensionless {pub: in};
    // equation that calculates xa1_inf
    xa1_inf_SM = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vm_SM+26.5{voltage_units})/(-7.9{voltage_units})));
    // closure of equation that calculates xa1_inf
    // equation that calculates tau_xa1
    tau_xa1_SM = T_correction_K*(31.8{time_units}+175{time_units}*exp(-0.5{dimensionless}*sqr((Vm_SM+44.4{voltage_units})/22.3{voltage_units})));
    // closure of equation that calculates tau_xa1
    // equation that calculates xa1
    ode(xa1_SM, time) = (xa1_inf_SM-xa1_SM)/tau_xa1_SM;
    // closure of equation d(xa1)/dt=(xa1_inf-xa1)/tau_xa1
  enddef;
  // closure of xa1

  def comp xa2_SM as
    var Vm_SM: voltage_units {pub: in};
    var xa2_inf_SM: dimensionless;
    var tau_xa2_SM: time_units;
    var xa2_SM: dimensionless {init: 0.72, pub: out};
    var time: time_units {pub: in};
    var T_correction_K: dimensionless {pub: in};
    // equation that calculates xa2_inf
    xa2_inf_SM = 0.1{dimensionless}+0.9{dimensionless}/(1.0{dimensionless}+exp((Vm_SM+65{voltage_units})/6.2{voltage_units}));
    // closure of equation that calculates xa2_inf
    // equation that calculates tau_xa2
    tau_xa2_SM = T_correction_K*90{time_units};
    // closure of equation that calculates tau_xa2
    // equation that calculates d_ka
    ode(xa2_SM, time) = (xa2_inf_SM-xa2_SM)/tau_xa2_SM;
    // closure of equation d(xa2)/dt=(xa2_inf-d_ka)/tau_xa2
  enddef;
  // closure of xa2

  def comp I_ka_SM as
    var I_ka_SM: current_units {pub: out};
    var E_K: voltage_units;
    var G_max_ka_SM: conductance_units {init: 9};
    var Vm_SM: voltage_units {priv: out, pub: in};
    var xa1_SM: dimensionless {priv: in};
    var xa2_SM: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var T_correction_K: dimensionless {priv: out, pub: in};
    var time: time_units {priv: out, pub: in};
    // EQUATION OF E_K
    E_K = RToF*ln(K_o/K_i);
    // closure ofEquation E_K
    // EQUATION OF I_ka
    I_ka_SM = G_max_ka_SM*xa1_SM*xa2_SM*(Vm_SM-E_K);
    // closure ofEquation I_ka
  enddef;
  // closure of I_ka

  def comp m_NSCC_SM as
    var Vm_SM: voltage_units {pub: in};
    var m_inf_NSCC_SM: dimensionless;
    var tau_m_NSCC_SM: time_units;
    var m_NSCC_SM: dimensionless {init: 0.0, pub: out};
    var time: time_units {pub: in};
    // equation that calculates m_inf_NSCC
    m_inf_NSCC_SM = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vm_SM+25.0{voltage_units})/(-20{voltage_units})));
    // closure of equation that calculates m_inf_NSCC
    tau_m_NSCC_SM = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vm_SM+66{voltage_units})/(-26{voltage_units})))*150{time_units};
    // closure of equation that calculates tau_m_NSCC
    // equation that calculates d_NSCC
    ode(m_NSCC_SM, time) = (m_inf_NSCC_SM-m_NSCC_SM)/tau_m_NSCC_SM;
    // closure of equation d(m_NSCC)/dt=(m_inf_NSCC-m_NSCC)/tau_m_NSCC
  enddef;
  // closure of d_NSCC

  def comp I_NSCC_SM as
    var I_NSCC_SM: current_units {pub: out};
    var E_NSCC: voltage_units {init: -28};
    var G_max_NSCC_SM: conductance_units {init: 50};
    var Vm_SM: voltage_units {priv: out, pub: in};
    var Ca_i: millimolar {priv: out, pub: in};
    var Ach: millimolar {pub: in};
    var m_NSCC_SM: dimensionless {priv: in};
    var f_ca_NSCC_SM: dimensionless;
    var rach_NSCC_SM: dimensionless;
    var RToF: voltage_units {pub: in};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var time: time_units {priv: out, pub: in};
    f_ca_NSCC_SM = 1.0{dimensionless}/(1.0{dimensionless}+pow(Ca_i/0.0002{millimolar}, -4.0{dimensionless}));
    // closure of equation that calculates fca_NSCC
    rach_NSCC_SM = 1.0{dimensionless}/(1.0{dimensionless}+0.01{millimolar}/Ach);
    // closure of equation that calculates rach_NSCC
    // EQUATION OF I_NSCC
    I_NSCC_SM = G_max_NSCC_SM*m_NSCC_SM*f_ca_NSCC_SM*rach_NSCC_SM*(Vm_SM-E_NSCC);
    // closure ofEquation I_NSCC
  enddef;
  // closure of I_NSCC
  // -------- ICC eqns ----------

  def comp Membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V_m: voltage_units {init: -70.5156, priv: out, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var C_m: capacitance_units {init: 26};
    var time: time_units {priv: out, pub: in};
    var I_Na: current_units {priv: in};
    var I_Ca: current_units {priv: in};
    var I_BK: current_units {priv: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var I_neural_ICC: current_units {init: 0.0};
    // modifiable-parameter: yes
    var Cor: dimensionless {init: 1, priv: out};
    var gbk_neur: conductance_units {priv: out, pub: in};
    var beta_neur: millimolar_per_time_units {priv: out, pub: in};
    ode(V_m, time) = -Cor*(I_Na+I_Ca+I_BK-I_neural_ICC)/C_m;
  enddef;

  def comp d_Na as
    var V_m: voltage_units {pub: in};
    var d_inf_Na: dimensionless;
    var tau_d_Na: time_units {init: 10.26};
    var d_Na: dimensionless {init: 0, pub: out};
    var time: time_units {pub: in};
    var Cor: dimensionless {pub: in};
    d_inf_Na = 1{dimensionless}/(1{dimensionless}+exp((V_m+7{voltage_units})/(-5{voltage_units})));
    ode(d_Na, time) = Cor*(d_inf_Na-d_Na)/tau_d_Na;
  enddef;

  def comp f_Na as
    var V_m: voltage_units {pub: in};
    var f_inf_Na: dimensionless;
    var tau_f_Na: time_units {init: 112.82};
    var f_Na: dimensionless {init: 0.9997, pub: out};
    var time: time_units {pub: in};
    var Cor: dimensionless {pub: in};
    f_inf_Na = 1{dimensionless}/(1{dimensionless}+exp((V_m+37.4{voltage_units})/4{voltage_units}));
    ode(f_Na, time) = Cor*(f_inf_Na-f_Na)/tau_f_Na;
  enddef;

  def comp i_Na as
    var I_Na: current_units {pub: out};
    var E_Na: voltage_units {init: 80};
    var G_Na: conductance_units {init: 28};
    var f_Na: dimensionless {priv: in};
    var d_Na: dimensionless {priv: in};
    var V_m: voltage_units {priv: out, pub: in};
    var time: time_units {priv: out, pub: in};
    var Cor: dimensionless {priv: out, pub: in};
    I_Na = G_Na*f_Na*d_Na*(V_m-E_Na);
  enddef;

  def comp d_BK as
    var V_m: voltage_units {pub: in};
    var Ca_c: millimolar {pub: in};
    var d_BK: dimensionless {pub: out};
    var time: time_units {pub: in};
    d_BK = 1{dimensionless}/(1{dimensionless}+exp(V_m/(-17{voltage_units})-2{dimensionless}*ln(Ca_c/0.001{millimolar})));
  enddef;

  def comp i_BK as
    var I_BK: current_units {pub: out};
    var Ca_c: millimolar {priv: out, pub: in};
    var E_K: voltage_units {init: -72};
    var G_max_BK: conductance_units {pub: in};
    var V_m: voltage_units {priv: out, pub: in};
    var d_BK: dimensionless {priv: in};
    var time: time_units {priv: out, pub: in};
    I_BK = G_max_BK*d_BK*(V_m-E_K);
  enddef;

  def comp i_Ca as
    var I_Ca: current_units {pub: out};
    var Ca_c: millimolar {pub: in};
    var E_Ca: voltage_units {init: -20};
    var G_MCa: conductance_units {init: 4};
    var q: dimensionless {init: 4};
    var k_Ca: millimolar {init: 0.94};
    var V_m: voltage_units {priv: out, pub: in};
    var G_Ca: conductance_units;
    G_Ca = G_MCa*pow(Ca_c, q)/(pow(k_Ca, q)+pow(Ca_c, q));
    I_Ca = G_Ca*(V_m-E_Ca);
  enddef;

  def comp intracellular_Ca as
    var Ca_c: millimolar {init: 0.2886, pub: out};
    var Ca_s: millimolar {init: 2.0014, pub: out};
    var IP_3: millimolar {init: 0.3791, pub: out};
    var time: time_units {pub: in};
    var V_m: voltage_units {priv: out, pub: in};
    var V_0: millimolar_per_time_units {init: 0.00011};
    var V_1: per_time_units {init: 0.00033};
    var V_M2: millimolar_per_time_units {init: 0.0049};
    var n: dimensionless {init: 2};
    var k_2: millimolar {init: 1};
    var V_M3: millimolar_per_time_units {init: 0.3224};
    var w: dimensionless {init: 4};
    var k_a: millimolar {init: 0.9};
    var m: dimensionless {init: 4};
    var k_r: millimolar {init: 2};
    var o: dimensionless {init: 4};
    var k_p: millimolar {init: 0.65};
    var V_in: millimolar_per_time_units;
    var V_2: millimolar_per_time_units;
    var V_3: millimolar_per_time_units;
    var k_f: per_time_units {init: 0.0000585};
    var K: per_time_units {init: 0.0006435};
    var beta: millimolar_per_time_units {pub: in};
    // modifiable-parameter: yes
    var eta: per_time_units {init: 0.0389};
    var V_M4: millimolar_per_time_units {init: 0.0004875};
    var k_4: millimolar {init: 0.5};
    var u: dimensionless {init: 4};
    var P_MV: millimolar_per_time_units {init: 0.0325};
    var k_v: voltage_units {init: -68};
    var r: dimensionless {init: 5};
    var Cor: dimensionless {priv: out, pub: in};
    V_in = V_0+V_1*IP_3;
    V_2 = V_M2*pow(Ca_c, n)/(pow(k_2, n)+pow(Ca_c, n));
    V_3 = V_M3*pow(Ca_c, w)/(pow(k_a, w)+pow(Ca_c, w))*pow(Ca_s, m)/(pow(k_r, m)+pow(Ca_s, m))*pow(IP_3, o)/(pow(k_p, o)+pow(IP_3, o));
    ode(IP_3, time) = Cor*(beta-eta*IP_3-V_M4*pow(IP_3, u)/(pow(k_4, u)+pow(IP_3, u))+P_MV*(1{dimensionless}-pow(V_m, r)/(pow(k_v, r)+pow(V_m, r))));
    ode(Ca_s, time) = Cor*(V_2-V_3-k_f*Ca_s);
    ode(Ca_c, time) = Cor*(V_in-V_2+V_3+k_f*Ca_s-K*Ca_c);
  enddef;

  def comp ICC_neural as
    var beta_neur: millimolar_per_time_units {pub: out};
    var gbk_neur: conductance_units {pub: out};
    // modifiable-parameter: yes
    var stim_cholinergic: dimensionless {init: 0};
    // modifiable-parameter: yes
    var stim_nitrergic: dimensionless {init: 0};
    // eqn fitted constants
    var A: millimolar_per_time_units {init: 0.0000620};
    var B: millimolar_per_time_units {init: 0.00253943161379783};
    var C: dimensionless {init: 0.276440631635841};
    var D: conductance_units {init: 1.3};
    var E: conductance_units {init: 7.62641726466626};
    var F: dimensionless {init: 0.140779519087363};
    var time: time_units {pub: in};
    var stim_ach: dimensionless {pub: out};
    var stim_no: dimensionless {pub: out};
    beta_neur = A+B*tanh(C*stim_cholinergic);
    gbk_neur = D+E*tanh(F*stim_nitrergic);
    stim_ach = stim_cholinergic;
    stim_no = stim_nitrergic;
  enddef;

  def comp SMC_neural as
    var Ach: millimolar {pub: out};
    var stim_ach: dimensionless {pub: in};
    var stim_no: dimensionless {pub: in};
    var G: millimolar {init: 0.00001};
    var H: millimolar {init: 0.00177972961024710};
    var I: dimensionless {init: 0.396177113350488};
    // +stim_ach*0.0001{millimolar};//0.0014
    Ach = G+H*tanh(I*stim_ach);
    // var Ach: millimolar {init: 0.00001, pub: out, priv: out};
  enddef;
  //  ------------------ Mapping -----------------
  // Sodium
  def map between m_Na_SM and I_Na_SM for
    vars Vm_SM and Vm_SM;
    vars m_Na_SM and m_Na_SM;
    vars time and time;
    vars T_correction_Na and T_correction_Na;
  enddef;
  def map between h_Na_SM and I_Na_SM for
    vars Vm_SM and Vm_SM;
    vars h_Na_SM and h_Na_SM;
    vars time and time;
    vars T_correction_Na and T_correction_Na;
  enddef;
  def map between I_Na_SM and SM_Membrane for
    vars Na_i and Na_i;
    vars Vm_SM and Vm_SM;
    vars I_Na_SM and I_Na_SM;
    vars time and time;
    vars RToF and RToF;
    vars Na_o and Na_o;
    vars T_correction_Na and T_correction_Na;
  enddef;
  // Ltype
  def map between d_Ltype_SM and I_Ltype_SM for
    vars Vm_SM and Vm_SM;
    vars d_Ltype_SM and d_Ltype_SM;
    vars time and time;
    vars T_correction_Ca and T_correction_Ca;
  enddef;
  def map between f_Ltype_SM and I_Ltype_SM for
    vars Vm_SM and Vm_SM;
    vars f_Ltype_SM and f_Ltype_SM;
    vars time and time;
    vars T_correction_Ca and T_correction_Ca;
  enddef;
  def map between f_ca_Ltype_SM and I_Ltype_SM for
    vars f_ca_Ltype_SM and f_ca_Ltype_SM;
    vars Ca_i and Ca_i;
    vars time and time;
    vars T_correction_Ca and T_correction_Ca;
  enddef;
  def map between I_Ltype_SM and SM_Membrane for
    vars Ca_i and Ca_i;
    vars Vm_SM and Vm_SM;
    vars I_Ltype_SM and I_Ltype_SM;
    vars time and time;
    vars RToF and RToF;
    vars Ca_o and Ca_o;
    vars T_correction_Ca and T_correction_Ca;
  enddef;
  // LVA
  def map between d_LVA_SM and I_LVA_SM for
    vars Vm_SM and Vm_SM;
    vars d_LVA_SM and d_LVA_SM;
    vars time and time;
    vars T_correction_Ca and T_correction_Ca;
  enddef;
  def map between f_LVA_SM and I_LVA_SM for
    vars Vm_SM and Vm_SM;
    vars f_LVA_SM and f_LVA_SM;
    vars time and time;
    vars T_correction_Ca and T_correction_Ca;
  enddef;
  def map between I_LVA_SM and SM_Membrane for
    vars Ca_i and Ca_i;
    vars Vm_SM and Vm_SM;
    vars I_LVA_SM and I_LVA_SM;
    vars time and time;
    vars RToF and RToF;
    vars Ca_o and Ca_o;
    vars T_correction_Ca and T_correction_Ca;
  enddef;
  // kr
  def map between xr1_SM and I_kr_SM for
    vars Vm_SM and Vm_SM;
    vars xr1_SM and xr1_SM;
    vars time and time;
    vars T_correction_K and T_correction_K;
  enddef;
  def map between xr2_SM and I_kr_SM for
    vars Vm_SM and Vm_SM;
    vars xr2_SM and xr2_SM;
    vars time and time;
    vars T_correction_K and T_correction_K;
  enddef;
  def map between I_kr_SM and SM_Membrane for
    vars K_i and K_i;
    vars Vm_SM and Vm_SM;
    vars I_kr_SM and I_kr_SM;
    vars time and time;
    vars RToF and RToF;
    vars K_o and K_o;
    vars T_correction_K and T_correction_K;
  enddef;
  // katype
  def map between xa1_SM and I_ka_SM for
    vars Vm_SM and Vm_SM;
    vars xa1_SM and xa1_SM;
    vars time and time;
    vars T_correction_K and T_correction_K;
  enddef;
  def map between xa2_SM and I_ka_SM for
    vars Vm_SM and Vm_SM;
    vars xa2_SM and xa2_SM;
    vars time and time;
    vars T_correction_K and T_correction_K;
  enddef;
  def map between I_ka_SM and SM_Membrane for
    vars K_i and K_i;
    vars Vm_SM and Vm_SM;
    vars I_ka_SM and I_ka_SM;
    vars time and time;
    vars RToF and RToF;
    vars K_o and K_o;
    vars T_correction_K and T_correction_K;
  enddef;
  // BK
  def map between d_BK_SM and I_BK_SM for
    vars Vm_SM and Vm_SM;
    vars Ca_i and Ca_i;
    vars d_BK_SM and d_BK_SM;
    vars time and time;
  enddef;
  def map between I_BK_SM and SM_Membrane for
    vars K_i and K_i;
    vars Ca_i and Ca_i;
    vars Vm_SM and Vm_SM;
    vars I_BK_SM and I_BK_SM;
    vars time and time;
    vars RToF and RToF;
    vars K_o and K_o;
    vars T_correction_BK and T_correction_BK;
  enddef;
  // kb
  def map between I_bk_SM and SM_Membrane for
    vars K_i and K_i;
    vars Vm_SM and Vm_SM;
    vars I_bk_SM and I_bk_SM;
    vars RToF and RToF;
    vars K_o and K_o;
  enddef;
  // NSCC
  def map between m_NSCC_SM and I_NSCC_SM for
    vars Vm_SM and Vm_SM;
    vars m_NSCC_SM and m_NSCC_SM;
    vars time and time;
  enddef;
  def map between I_NSCC_SM and SM_Membrane for
    vars K_i and K_i;
    vars Na_i and Na_i;
    vars Vm_SM and Vm_SM;
    vars I_NSCC_SM and I_NSCC_SM;
    vars time and time;
    vars RToF and RToF;
    vars K_o and K_o;
    vars Na_o and Na_o;
    vars Ca_i and Ca_i;
    vars Ach and Ach;
  enddef;
  // Jsr
  def map between J_CaSR_SM and SM_Membrane for
    vars J_CaSR_SM and J_CaSR_SM;
    vars Ca_i and Ca_i;
  enddef;
  def map between SM_Membrane and Environment for
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
    vars K_o and K_o;
    vars Cl_o and Cl_o;
    vars RToF and RToF;
    vars FoRT and FoRT;
    vars F and F;
    vars T_correction_Ca and T_correction_Ca;
    vars T_correction_Na and T_correction_Na;
    vars T_correction_K and T_correction_K;
    vars T_correction_BK and T_correction_BK;
  enddef;
  // ------- Additional ------------
  def map between Time and SM_Membrane for
    vars time and time;
  enddef;
  def map between Gap_junction and I_stim for
    vars Gcouple and Gcouple;
  enddef;
  def map between I_stim and SM_Membrane for
    vars I_stim and I_stim;
    vars V_SMC and Vm_SM;
  enddef;
  def map between I_stim and Membrane for
    vars V_ICC and V_m;
  enddef;
  def map between SM_Membrane and SMC_neural for
    vars Ach and Ach;
  enddef;
  // ________ ICC Mappings________
  def map between d_Na and i_Na for
    vars V_m and V_m;
    vars d_Na and d_Na;
    vars time and time;
    vars Cor and Cor;
  enddef;
  def map between f_Na and i_Na for
    vars V_m and V_m;
    vars f_Na and f_Na;
    vars time and time;
    vars Cor and Cor;
  enddef;
  def map between i_Na and Membrane for
    vars V_m and V_m;
    vars I_Na and I_Na;
    vars time and time;
    vars Cor and Cor;
  enddef;
  def map between d_BK and i_BK for
    vars V_m and V_m;
    vars Ca_c and Ca_c;
    vars d_BK and d_BK;
    vars time and time;
  enddef;
  def map between i_BK and Membrane for
    vars V_m and V_m;
    vars I_BK and I_BK;
    vars time and time;
    vars G_max_BK and gbk_neur;
  enddef;
  def map between i_BK and intracellular_Ca for
    vars Ca_c and Ca_c;
  enddef;
  def map between i_Ca and Membrane for
    vars V_m and V_m;
    vars I_Ca and I_Ca;
  enddef;
  def map between i_Ca and intracellular_Ca for
    vars Ca_c and Ca_c;
  enddef;
  def map between intracellular_Ca and Membrane for
    vars V_m and V_m;
    vars time and time;
    vars Cor and Cor;
    vars beta and beta_neur;
  enddef;
  def map between ICC_neural and Membrane for
    vars beta_neur and beta_neur;
    vars gbk_neur and gbk_neur;
  enddef;
  def map between Time and Membrane for
    vars time and time;
  enddef;
  def map between active_tension and SM_Membrane for
    vars Ca and Ca_i;
  enddef;
  def map between Time and ICC_neural for
    vars time and time;
  enddef;
  def map between SMC_neural and ICC_neural for
    vars stim_ach and stim_ach;
    vars stim_no and stim_no;
  enddef;
  // ------------- Encapsulation ---------------

  def group as encapsulation for
    comp SM_Membrane incl
      comp I_Na_SM incl
        comp m_Na_SM;
        comp h_Na_SM;
      endcomp;
      comp I_Ltype_SM incl
        comp d_Ltype_SM;
        comp f_Ltype_SM;
        comp f_ca_Ltype_SM;
      endcomp;
      comp I_LVA_SM incl
        comp d_LVA_SM;
        comp f_LVA_SM;
      endcomp;
      comp I_BK_SM incl
        comp d_BK_SM;
      endcomp;
      comp I_kr_SM incl
        comp xr1_SM;
        comp xr2_SM;
      endcomp;
      comp I_ka_SM incl
        comp xa1_SM;
        comp xa2_SM;
      endcomp;
      comp I_bk_SM;
      comp I_NSCC_SM incl
        comp m_NSCC_SM;
      endcomp;
      comp J_CaSR_SM;
    endcomp;
    comp Membrane incl
      comp i_Na incl
        comp d_Na;
        comp f_Na;
      endcomp;
      comp i_BK incl
        comp d_BK;
      endcomp;
      comp i_Ca;
      comp intracellular_Ca;
    endcomp;
  enddef;
enddef;
